'SnowSurvey CR6
'Created with Jinja2 from bear_valley_cr_basic

'Constants
Const SITE_LOCATION_PRESSURE=74.11727
Const SR50AT_Minimum_Depth=14 'Minimum depth for SR50AT-M Snow Depth measurement in inches

'Functions

'Calculate Wet Bulb
Function WetBulb_Calc(AirTF, TdF, RH)
	Dim _AirTC
	Dim _TdC
	Dim _SPkPa
	Dim _Twpg
	Dim _Twg
	Dim _Vpg
	Dim _Vp
	Dim _SVp
	Dim _Twch
	Dim _VpgVpd
	Dim _Top
	Dim _Bottom
	Dim _N

	Dim _TwC
	Dim _TwF

	'Dew Point and Wet-Bulb calculation prep
	_AirTC=(5/9)*(AirTF-32)
	_TdC=(5/9)*(TdF-32)
	_SPkPa=SITE_LOCATION_PRESSURE

	SatVP(_SVp,_AirTC)
	_Vp=RH*_SVp/100
	
	'Find Wet-Bulb 'TwC'
	_Top=_AirTC
	_Bottom=_TdC
	For _N = 1 To 25
		_Twpg=_Twg
		_Twg=((_Top-_Bottom)/2)+_Bottom
		WetDryBulb(_Vpg,_AirTC,_Twg,_SPkPa)
		_VpgVpd=_Vpg-_Vp
		_Twch=ABS(_Twpg-_Twg)
		If _VpgVpd>0 Then
			_Top=_Twg
		Else
			_Bottom=_Twg
		EndIf
		If _Twch<0.01 Or _N=25 Then ExitFor
	Next
	_TwC=_Twg
	_TwF=1.8*_TwC+32
	Return _TwF
EndFunction

'Calculate Dew Point
Function DewPoint_Calc(AirTF, RH)
	Dim _TdC
	Dim _TdF
	Dim _AirTC


	_AirTC=(5/9)*(AirTF-32)
	'Dew Point calculation 'TdF'
	DewPoint(_TdC,_AirTC,RH)
	If _TdC>_AirTC Or _TdC=NAN Then _TdC=_AirTC
	_TdF=1.8*_TdC+32
	Return _TdF
EndFunction

'Calculate Wind Chill
Function WindChill_Calc(AirTF, WS_mph)
	Dim _Wc_F

	'Wind Chill calculation '_Wc_F'
	_Wc_F=35.74+0.6215*AirTF-35.75*WS_mph^0.16+0.4275*AirTF*WS_mph^0.16
	If _Wc_F>AirTF Or _Wc_F=NAN Then _Wc_F=AirTF
	If AirTF>50 OR WS_mph<3 Then _Wc_F=AirTF

	Return _Wc_F
EndFunction

'Declare Variables and Units
'Temperature Variables
Public AirTF : Units AirTF=Deg F
Public TdF : Units TdF=Deg F
Public TwF : Units TwF=Deg F
Public RH : Units RH=%
Public WC_F : Units WC_F=Deg F

'Windspeed Variables
Public WS_mph : Units WS_mph=miles/hour
Public WindDir : Units WindDir=degrees


Public BattV: Units BattV=Volts

Dim PTemp_C
Dim Temp_F


Public DisableSnowDepth As Boolean
Dim StartupTime(9)


'SR50AT Variable Code - Sensor # 1
'Single measured values.
Public SR50AT_1_M(3)
Alias SR50AT_1_M(1) = DT_1_M : Units DT_1_M = inches 'Distance from the SR50AT.
Alias SR50AT_1_M(2) = Q_1_M : Units Q_1_M = unitless 'Quality number.
Alias SR50AT_1_M(3) = Air_1_M : Units Air_1_M = °C 'Air temperature.
'Array to hold 11 SR50AT measurements composed of a distance and
'quality number, and air temperature.
Dim SR50AT_1(11,3)

'Sorted array of 11 SR50AT measurements composed of a distance and
'quality number, and temperature. Measurements are sorted by the 
'distance value from smallest
Dim Result_SR50AT_1(11,3)

Dim SR50AT_1_TCDT : Units SR50AT_1_TCDT = inches 'Temperature corrected distance
Dim SR50AT_1_Q : Units SR50AT_1_Q = unitless 'Quality number
Dim SR50AT_1_AirTempC : Units SR50AT_1_AirTempC = °C 'Air temperature

Public SR50AT_1_Initial_Depth : Units SR50AT_1_Initial_Depth = inches 'Distance to ground.
Public SR50AT_1_Snow_Depth : Units SR50AT_1_Snow_Depth = inches 'Snow depth.

'Controls SR50AT measurement. This flag can be manually controlled to
'run tests in the field or is automatically set 2 minutes before the
'hourly data storage interval. This is done so 11 measurements can
'be made and sorted before the values are stored.
Dim SR50ATCtrl_1 As Boolean
'Set this flag to measure and store the initial distance from the
'SR50AT to the ground.
Dim SR50AT_MID_1 As Boolean

Dim SR50AT_Counter_1 'used as a counter

'SR50AT Variable Code - Sensor # 2
'Single measured values.
Public SR50AT_2_M(3)
Alias SR50AT_2_M(1) = DT_2_M : Units DT_2_M = inches 'Distance from the SR50AT.
Alias SR50AT_2_M(2) = Q_2_M : Units Q_2_M = unitless 'Quality number.
Alias SR50AT_2_M(3) = Air_2_M : Units Air_2_M = °C 'Air temperature.
'Array to hold 11 SR50AT measurements composed of a distance and
'quality number, and air temperature.
Dim SR50AT_2(11,3)

'Sorted array of 11 SR50AT measurements composed of a distance and
'quality number, and temperature. Measurements are sorted by the 
'distance value from smallest
Dim Result_SR50AT_2(11,3)

Dim SR50AT_2_TCDT : Units SR50AT_2_TCDT = inches 'Temperature corrected distance
Dim SR50AT_2_Q : Units SR50AT_2_Q = unitless 'Quality number
Dim SR50AT_2_AirTempC : Units SR50AT_2_AirTempC = °C 'Air temperature

Public SR50AT_2_Initial_Depth : Units SR50AT_2_Initial_Depth = inches 'Distance to ground.
Public SR50AT_2_Snow_Depth : Units SR50AT_2_Snow_Depth = inches 'Snow depth.

'Controls SR50AT measurement. This flag can be manually controlled to
'run tests in the field or is automatically set 2 minutes before the
'hourly data storage interval. This is done so 11 measurements can
'be made and sorted before the values are stored.
Dim SR50ATCtrl_2 As Boolean
'Set this flag to measure and store the initial distance from the
'SR50AT to the ground.
Dim SR50AT_MID_2 As Boolean

Dim SR50AT_Counter_2 'used as a counter
Dim Rain_in : Units Rain_in=inch
Public BaroVUE(3)

Alias BaroVUE(1)=BaroV_BP : Units BaroV_BP=inHg
Alias BaroVUE(2)=BaroV_Temp : Units BaroV_Temp=deg F
Alias BaroVUE(3)=BaroV_Qual : Units BaroV_Qual=unitless

'Power Control - manual output flags for external power switching devices
Public EnableMeanwellCharger As Boolean = True


'Define Data Tables
DataTable(Table1,True,-1)
	DataInterval(0,60,Min,10)
	Sample(1,AirTF,FP2)
	Sample(1,RH,FP2)

	Totalize(1,Rain_in,FP2,False)
	FieldNames("Precip")

	Sample(1,SR50AT_1_Snow_Depth,FP2)
	FieldNames("IntSnow")

	Sample(1,SR50AT_2_Snow_Depth,FP2)
	FieldNames("TtlSnow")

	Sample(1,BattV,FP2)
	FieldNames("Battery")
	
	Sample(1,PTemp_C,FP2)
	FieldNames("CR6T_C")

	Sample(1,SR50AT_2_AirTempC,FP2)
	FieldNames("TtlAirTC")

	Sample(1,SR50AT_1_TCDT,FP2)
	FieldNames("IntDist")

	Sample(1,SR50AT_1_Q,FP2)
	FieldNames("IntQ")

	Sample(1,SR50AT_2_TCDT,FP2)
	FieldNames("TtlDist")

	Sample(1,SR50AT_2_Q,FP2)
	FieldNames("TtlQ")

	Average(1,WS_mph,FP2,False)
	Maximum(1,WS_mph,FP2,False,False)

	WindVector(1,WS_mph,WindDir,FP2,False,0,0,1)
	FieldNames("WS_mph_S_WVT,WindDir_D1_WVT")
	Sample(1,WC_F,FP2)
	Sample(1,TdF,FP2)
	Sample(1,TwF,FP2)
	Sample(1,BaroV_BP,IEEE4)
EndTable


DataTable(TG_15S_Wind,True,178560)
	DataInterval(0,15,Sec,10)

	Maximum(1,WS_mph,FP2,False,False)
	FieldNames("WS_3_sec_average_Max")
	WindVector(1,WS_mph,WindDir,FP2,False,0,0,1)
	FieldNames("WS_mph_S_WVT,WindDir_D1_WVT")
EndTable

DataTable(TG_5Min_Temp,True,8640)
	DataInterval(0,5,Min,10)

	Sample(1,AirTF,FP2)
	Sample(1,WC_F,FP2)
	Sample(1,TdF,FP2)
	Sample(1,TwF,FP2)
	Sample(1,RH,FP2)
	Sample(1,BattV,FP2)
EndTable

DataTable(TG_15M_Precip,True,2880)
	DataInterval(0,15,Min,10)

	Totalize(1,Rain_in,FP2,False)
	FieldNames("Precip")
	Sample(1,SR50AT_1_Snow_Depth,FP2)
	FieldNames("IntSnow")
	Sample(1,SR50AT_2_Snow_Depth,FP2)
	FieldNames("TtlSnow")

	Sample(1,BaroV_BP,IEEE4)
	FieldNames("BarometricPressure")
	
	Sample(1,DisableSnowDepth,Boolean)
	FieldNames("SnowDepthDisabled")
EndTable

DataTable(MW_15M,True,2000)
	DataInterval(0,15,Min,10)
	Sample(1,AirTF,FP2)
	Sample(1,TdF,FP2)
	Sample(1,TwF,FP2)
	Sample(1,RH,FP2)

	WindVector(1,WS_mph,WindDir,FP2,False,0,0,1)
	FieldNames("WS_mph_S_WVT,WindDir_D1_WVT")
	
	Maximum(1,WS_mph,FP2,False,False)
	FieldNames("WS_3_sec_average_Max")

	Sample(1,BaroV_BP,IEEE4)
	Totalize(1,Rain_in,FP2,False)
	FieldNames("Precip")
	Sample(1,SR50AT_1_Snow_Depth,FP2)
	FieldNames("IntSnow")
	Sample(1,SR50AT_2_Snow_Depth,FP2)
	FieldNames("TtlSnow")
EndTable

DataTable(Table10Min,True,4320)
	DataInterval(0,10,Min,10)
	Minimum(1,BattV,FP2,False,False)
	Sample(1,AirTF,FP2)
	Sample(1,RH,FP2)
	Sample(1,WC_F,FP2)
	Sample(1,TdF,FP2)
	Sample(1,TwF,FP2)

	WindVector(1,WS_mph,WindDir,FP2,False,0,0,1)
	FieldNames("WS_mph_S_WVT,WindDir_D1_WVT")
	Maximum(1,WS_mph,FP2,False,False)
	FieldNames("WS_3_sec_average_Max")
EndTable

DataTable(Table60Min,True,720)
	DataInterval(0,60,Min,10)
	Sample(1,BattV,FP2)

	Sample(1,AirTF,FP2)
	Sample(1,RH,FP2)
	Sample(1,WC_F,FP2)
	Sample(1,TdF,FP2)
	Sample(1,TwF,FP2)

	WindVector(1,WS_mph,WindDir,FP2,False,0,0,1)
	FieldNames("WS_mph_S_WVT,WindDir_D1_WVT")
	Maximum(1,WS_mph,FP2,False,False)
	FieldNames("WS_3_sec_average_Max")

	Totalize(1,Rain_in,FP2,False)
	FieldNames("Precip")
	Sample(1,SR50AT_1_Snow_Depth,FP2)
	FieldNames("IntSnow")
	Sample(1,SR50AT_2_Snow_Depth,FP2)
	FieldNames("TtlSnow")

EndTable

DataTable(StationDaily,True,30)
	DataInterval(0,1440,Min,10)
	Minimum(1,BattV,FP2,False,False)

	Minimum(1,PTemp_C,FP2, False, False)
	Minimum(1,Temp_F,FP2, False, False)
	
	Average(1,PTemp_C,FP2, False)
	Average(1,Temp_F,FP2, False)

	Maximum(1,PTemp_C,FP2, False, False)
	Maximum(1,Temp_F,FP2, False, False)
EndTable

'Main Program
BeginProg
	'Default snow depth to disabled for the off-season (June - October) based
	'on the RTC date at boot.
	'RealTime() array: (1)Year (2)Month (3)Day (4)Hour (5)Min (6)Sec (7)uSec (8)DOW (9)DOY
	RealTime(StartupTime)
	If StartupTime(2)>=6 AND StartupTime(2)<=10 Then
		DisableSnowDepth = True
	Else
		DisableSnowDepth = False
	EndIf
	SR50AT_Counter_1 = 1
	SR50AT_Counter_2 = 1
	SR50AT_1_Initial_Depth = 31.03
	SR50AT_2_Initial_Depth = 235.85
	SR50ATCtrl_1 = True
	SR50ATCtrl_2 = True
	'Main Scan
	Scan(3,Sec,1,0)
		'Power Control - drive the Meanwell charger enable signal
		PortSet(U9,EnableMeanwellCharger)
		'05103 Wind Speed & Direction Sensor measurements 'WS_mph' and 'WindDir'
		PulseCount(WS_mph,1,U10,5,1,0.2192,0)
		BrHalf(WindDir,1,mV5000,U8,U7,1,2500,True,20000,60,355,0)
		If WindDir>=355 Or WindDir<0 Then WindDir=0
		'Generic Tipping Bucket Rain Gauge measurement 'Rain_in'
		PulseCount(Rain_in,1,U3,1,0,0.01,0)

		'Call Data Tables and Store Data
		CallTable Table1
		CallTable TG_15S_Wind
		CallTable TG_5Min_Temp
		CallTable TG_15M_Precip

		CallTable MW_15M
		CallTable Table10Min
		CallTable Table60Min
		CallTable StationDaily
	NextScan

	
SlowSequence
	Scan(10,Sec,1,0)
		If DisableSnowDepth
			SR50ATCtrl_1 = False
			SR50AT_1_Snow_Depth = 0
		Else
			'SR50AT Sample Code - Sensor # 1
			'Automated snow depth measurement. Must occur two minutes before
			'actual storage time to get 11 measurements completed.
			If TimeIntoInterval (13,15,Min) Then
				SR50ATCtrl_1 = True
			EndIf
			'Set this flag to true to get the initial distance from the SR50AT
			'to the ground.
			If SR50AT_MID_1 Then SR50ATCtrl_1 = True
			'Logic to make 11 snow depth measurements, sort them, and store
			'the corrected values.
			If SR50ATCtrl_1 Then
			'SR50AT Sonic Ranging Sensor (SDI-12 Output) measurements
			'MDT, MQ, & MAir
				SDI12Recorder(SR50AT_1_M(),C1,"0","M7!",1,0,-1)
				'Load the array to be sorted.
				SR50AT_1(SR50AT_Counter_1,1) = SR50AT_1_M(1)
				SR50AT_1(SR50AT_Counter_1,2) = SR50AT_1_M(2)
				SR50AT_1(SR50AT_Counter_1,3) = SR50AT_1_M(3)
				SR50AT_Counter_1 += 1
				If SR50AT_Counter_1 > 11 Then
					SR50AT_Counter_1 = 1
					SR50ATCtrl_1 = False
					SortSpa (Result_SR50AT_1(1,1),11,SR50AT_1(1,1),2)
					SR50AT_1_TCDT = Result_SR50AT_1(6,1)
					SR50AT_1_Q = Result_SR50AT_1(6,2)
					SR50AT_1_AirTempC = Result_SR50AT_1(6,3)
					'This sensor has no internal thermistor (SR50A, not SR50AT), so its
					'reported distance and air temperature are uncompensated. Correct the
					'distance manually using the station's own air temperature sensor.
					SR50AT_1_AirTempC = (5/9)*(AirTF-32)
					SR50AT_1_TCDT = SR50AT_1_TCDT * SQR((SR50AT_1_AirTempC+273.15)/273.15)
					If SR50AT_MID_1 Then
						SR50AT_1_Initial_Depth = SR50AT_1_TCDT
						SR50AT_MID_1 = False
					EndIf
					If SR50AT_1_TCDT < SR50AT_Minimum_Depth Then
						SR50AT_1_Snow_Depth = SR50AT_1_Initial_Depth - SR50AT_Minimum_Depth
					Else
						SR50AT_1_Snow_Depth = SR50AT_1_Initial_Depth - SR50AT_1_TCDT
					EndIf
				EndIf
			EndIf
		EndIf

		If DisableSnowDepth
			SR50ATCtrl_2 = False
			SR50AT_2_Snow_Depth = 0
		Else
			'SR50AT Sample Code - Sensor # 2
			'Automated snow depth measurement. Must occur two minutes before
			'actual storage time to get 11 measurements completed.
			If TimeIntoInterval (13,15,Min) Then
				SR50ATCtrl_2 = True
			EndIf
			'Set this flag to true to get the initial distance from the SR50AT
			'to the ground.
			If SR50AT_MID_2 Then SR50ATCtrl_2 = True
			'Logic to make 11 snow depth measurements, sort them, and store
			'the corrected values.
			If SR50ATCtrl_2 Then
			'SR50AT Sonic Ranging Sensor (SDI-12 Output) measurements
			'MDT, MQ, & MAir
				SDI12Recorder(SR50AT_2_M(),C3,"0","M7!",1,0,-1)
				'Load the array to be sorted.
				SR50AT_2(SR50AT_Counter_2,1) = SR50AT_2_M(1)
				SR50AT_2(SR50AT_Counter_2,2) = SR50AT_2_M(2)
				SR50AT_2(SR50AT_Counter_2,3) = SR50AT_2_M(3)
				SR50AT_Counter_2 += 1
				If SR50AT_Counter_2 > 11 Then
					SR50AT_Counter_2 = 1
					SR50ATCtrl_2 = False
					SortSpa (Result_SR50AT_2(1,1),11,SR50AT_2(1,1),2)
					SR50AT_2_TCDT = Result_SR50AT_2(6,1)
					SR50AT_2_Q = Result_SR50AT_2(6,2)
					SR50AT_2_AirTempC = Result_SR50AT_2(6,3)
					If SR50AT_MID_2 Then
						SR50AT_2_Initial_Depth = SR50AT_2_TCDT
						SR50AT_MID_2 = False
					EndIf
					If SR50AT_2_TCDT < SR50AT_Minimum_Depth Then
						SR50AT_2_Snow_Depth = SR50AT_2_Initial_Depth - SR50AT_Minimum_Depth
					Else
						SR50AT_2_Snow_Depth = SR50AT_2_Initial_Depth - SR50AT_2_TCDT
					EndIf
				EndIf
			EndIf
		EndIf
	NextScan


SlowSequence
	'Non-Wind Scan
	Scan(60,Sec,1,0)
		'Default CR6 Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR6 Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,60)
		
		'Type T Thermocouple measurements 'Temp_F'
		TCDiff(Temp_F,1,mv200C,U5,TypeT,PTemp_C,True,0,60,1.8,32)

		'EE181 (constant power) Temperature & Relative Humidity Sensor measurements 'AirTF' and 'RH'
		VoltSE(AirTF,1,mV1000,U1,False,0,60,0.18,-40)
		VoltSE(RH,1,mV1000,U2,False,0,60,0.1,0)
		If RH>100 AND RH<108 Then RH=100

		TdF = DewPoint_Calc(AirTF, RH)
		TwF = WetBulb_Calc(AirTF, TdF, RH)

		WC_F = WindChill_Calc(AirTF, WS_mph)

		'BaroVUE10 (SDI-12) Barometric Pressure Sensor measurements 'BaroV_BP', 'BaroV_Temp', and 'BaroV_Qual'
		SDI12Recorder(BaroVUE(),U11,"3","M!",1,0,-1)
		'Correct BaroVUE10 (SDI-12) Barometric Pressure Sensor 'BaroV_BP' measurement from station pressure to sea level pressure
		BaroV_BP=BaroV_BP+1013.25*(1-(1-2375/44307.69231)^5.25328)
		'Convert BaroVUE10 (SDI-12) Barometric Pressure Sensor measurement 'BaroV_BP' from hPa (mbar) to inHg
		BaroV_BP=BaroV_BP*0.02953
		'Convert BaroVUE10 (SDI-12) Barometric Pressure Sensor measurement 'BaroV_Temp' from deg C to deg F
		BaroV_Temp=BaroV_Temp*1.8+32
	NextScan


EndProg
