'{{ station_name }} {{ model_series }}
'Created with Jinja2 from bear_valley_cr_basic

'Constants
Const SITE_LOCATION_PRESSURE=74.11727
Const SR50AT_Minimum_Depth=14 'Minimum depth for SR50AT-M Snow Depth measurement in inches

'Functions

{% include find_template("Functions/WetBulb_Function.CRB") %}

{% include find_template("Functions/DewPoint_Function.CRB") %}

{% include find_template("Functions/WindChill_Function.CRB") %}

'Declare Variables and Units
{% include find_template("Air_Temperature_Vars.CRB") %}

{% include find_template("Windspeed_Vars.CRB") %}


Public BattV: Units BattV=Volts

Dim PTemp_C
{% if sensor_cabinet_temperature["disabled"] != True %}
Dim Temp_F
{% endif %}


{% if enable_precip_and_snow_sensors %}
Public DisableSnowDepth As Boolean
Dim StartupTime(9)

{% with sensor_index=1 %}
{% include "Include/SR50AT_M/SR50AT_M_Vars.CRB" %}

{% endwith %}
{% with sensor_index=2 %}
{% include "Include/SR50AT_M/SR50AT_M_Vars.CRB" %}

Dim Rain_in : Units Rain_in=inch
Public BaroVUE(3)

Alias BaroVUE(1)=BaroV_BP : Units BaroV_BP=inHg
Alias BaroVUE(2)=BaroV_Temp : Units BaroV_Temp=deg F
Alias BaroVUE(3)=BaroV_Qual : Units BaroV_Qual=unitless
{% endwith %}
{% endif %}

{% if power_control and power_control["enabled"] %}
{% include find_template("Power_Control_Vars.CRB") %}

{% endif %}
{% include find_template("Watchdog_Vars.CRB") %}

'Define Data Tables
{% for table in legacy_tables %}
{% include table["file"] %}


{% endfor %}
{% include "Include/Tables/TG_15S_Wind.CRB" %}

{% include "Include/Tables/TG_5Min_Temp.CRB" %}

{% if enable_precip_and_snow_sensors %}
{% include "Include/Tables/TG_15M_Precip.CRB" %}

{% endif %}
{% if include_mesowest | default(True) %}
{% include "Include/Tables/MW_15M.CRB" %}
{% endif %}

{% include "Include/Tables/Table10Min.CRB" %}

{% include "Include/Tables/Table60Min.CRB" %}

{% include "Include/Tables/StationDaily.CRB" %}


'Main Program
BeginProg
	{% if enable_precip_and_snow_sensors %}
	'Default snow depth to disabled for the off-season (June - October) based
	'on the RTC date at boot.
	'RealTime() array: (1)Year (2)Month (3)Day (4)Hour (5)Min (6)Sec (7)uSec (8)DOW (9)DOY
	RealTime(StartupTime)
	If StartupTime(2)>=6 AND StartupTime(2)<=10 Then
		DisableSnowDepth = True
	Else
		DisableSnowDepth = False
	EndIf
	SR50AT_Counter_1 = 1
	SR50AT_Counter_2 = 1
	SR50AT_1_Initial_Depth = 31.03
	SR50AT_2_Initial_Depth = 235.85
	SR50ATCtrl_1 = True
	SR50ATCtrl_2 = True
	{% endif %}
	'Main Scan
	Scan({{ main_scan_interval_count }},{{ main_scan_interval_unit }},1,0)
		{% include find_template("Watchdog_Scan.CRB") %}
		{% if power_control and power_control["enabled"] %}
		{% include find_template("Power_Control_Scan.CRB") %}
		{% endif %}
		{% include find_template("Windspeed_Scan.CRB") %}

		{% if enable_precip_and_snow_sensors %}
		'Generic Tipping Bucket Rain Gauge measurement 'Rain_in'
		PulseCount(Rain_in,1,U3,1,0,0.01,0)
		{% endif %}

		'Call Data Tables and Store Data
		{% for table in legacy_tables %}
		CallTable {{ table["name"] }}
		{% endfor %}
		CallTable TG_15S_Wind
		CallTable TG_5Min_Temp
		{% if enable_precip_and_snow_sensors %}
		CallTable TG_15M_Precip

		{% endif %}
		{% if include_mesowest | default(True) %}
		CallTable MW_15M
		{% endif %}
		CallTable Table10Min
		CallTable Table60Min
		CallTable StationDaily
	NextScan

	
{% if enable_precip_and_snow_sensors %}
SlowSequence
	Scan(10,Sec,1,0)
		{% with sensor_index=1 %}
		{% include "Include/SR50AT_M/SR50AT_M_Sample.CRB" %}
		{% endwith %}


		{% with sensor_index=2 %}
		{% include "Include/SR50AT_M/SR50AT_M_Sample.CRB" %}
		{% endwith %}

	NextScan
{% endif %}


SlowSequence
	'Non-Wind Scan
	Scan(60,Sec,1,0)
		'Default {{ model_series }} Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default {{ model_series }} Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,{{ panel_frequency_filter }})
		
		{% include find_template("Cabinet_Temperature_Scan.CRB") %}

		{% include find_template("Air_Temperature_Scan.CRB") %}

{% if enable_precip_and_snow_sensors %}
		{% include "Include/Barometric/BaroSlowScan.CRB" %}
{% endif %}

	NextScan

{% include find_template("Watchdog_PingScan.CRB") %}

EndProg
